def model tran_model_2009 as
  def unit unit_normalised_force as base unit;
  def unit unit_normalised_force_millisecond2_per_micrometre as
    unit unit_normalised_force;
    unit millisecond {expo: 2};
    unit micrometre {expo: -1};
  enddef;
  def unit millimeter_squared as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit per_mm_squared as
    unit millimeter_squared {expo: -1};
  enddef;
  def unit unit_normalised_force_millisecond as
    unit unit_normalised_force;
    unit millisecond;
  enddef;
  def unit unit_normalised_force_millisecond_per_micrometre as
    unit unit_normalised_force;
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit unit_normalised_force_per_micrometre as
    unit unit_normalised_force;
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_micrometre as
    unit micrometre {expo: -1};
  enddef;
  def unit micrometre_per_millisecond as
    unit micrometre;
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond_per_micrometre as
    unit millisecond;
    unit micrometre {expo: -1};
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_millisecond as
    unit millisecond {expo: -1};
  enddef;
  def unit millisecond2_per_micrometre as
    unit millisecond {expo: 2};
    unit micrometre {expo: -1};
  enddef;
  def unit per_mole as
    unit mole {expo: -1};
  enddef;
  def unit per_Litre as
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit Molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit um_per_Liter as
    unit metre {pref: micro};
    unit per_Litre;
  enddef;
  def unit micromolar2 as
    unit micromolar {expo: 2};
  enddef;
  def unit micromolar_per_millisecond as
    unit micromolar;
    unit millisecond {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit millisecond {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit millisecond {expo: -1};
  enddef;
  def unit milliNewton as
    unit newton {pref: milli};
  enddef;
  def unit millinewton_per_millimetre2 as
    unit newton {pref: milli};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit millinewton_micrometre_per_millimetre2 as
    unit newton {pref: milli};
    unit metre {pref: micro};
    unit metre {expo: -2, pref: milli};
  enddef;
  def unit millinewton_micrometre_per_millimetre2_per_millisecond as
    unit newton {pref: milli};
    unit metre {pref: micro};
    unit metre {expo: -2, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;

  def group as encapsulation for
    comp interface incl
      comp sarcomere_geometry;
      comp Ca_binding_to_troponin_to_thin_filament_regulation;
      comp thin_filament_regulation_and_crossbridge_cycling_rates;
      comp regulation_and_crossbridge_cycling_state_equations;
      comp mean_strain_of_strongly_bound_states;
      comp normalised_active_and_passive_force;
      comp calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding;
      comp model_parameters;
    endcomp;
  enddef;

  def comp interface as
    // inputs
    var time: millisecond {priv: out, pub: in};
    var Ca_i: micromolar {priv: out, pub: in};
    var active_tension: dimensionless {priv: in, pub: out};
    var preload: unit_normalised_force {priv: in, pub: out};
    var passive: unit_normalised_force {priv: in, pub: out};
    var TmpC: celsius {init: 23, priv: out, pub: out};
    var x_0: micrometre {init: 0.007, priv: out, pub: out};
    var lambda: dimensionless {priv: out, pub: in};
    var lambda_dot: per_millisecond {priv: out, pub: in};
    var velocitySF: dimensionless {priv: out, pub: in};
    var VelocitySwitch: dimensionless {priv: out, pub: in};
    var SLrest: micrometre {init: 1.9, priv: out, pub: out};
    var SLset: micrometre {init: 2.3, priv: out, pub: out};
    var xbmodsp: dimensionless {priv: out, pub: in};
    var dTropTot: micromolar_per_millisecond {priv: in, pub: out};
    var SL: micrometre {priv: in, pub: out};
    var afterload: unit_normalised_force {priv: in, pub: out};
    var integral_force: unit_normalised_force_millisecond {priv: in, pub: out};
    var F_total: dimensionless {priv: in, pub: out};
    var SEon: dimensionless {priv: in, pub: out};
    var mass: unit_normalised_force_millisecond2_per_micrometre {priv: in, pub: out};
    var ATP_consumption_rate: first_order_rate_constant {pub: out, priv: in};
    var XB_cycling: first_order_rate_constant {priv: in, pub: out};
    var dSL: micrometre_per_millisecond {pub: out, priv: in};
    var gxbT: first_order_rate_constant {priv: in, pub: out};
    var XBpostr: dimensionless {priv: in, pub: out};
    var hfT: first_order_rate_constant {priv: in, pub: out};
    var SOVFThick: dimensionless {priv: in, pub: out};
    var xXBpostr: micrometre {priv: in, pub: out};
    var XBprer: dimensionless {priv: in, pub: out};
    var xXBprer: micrometre {priv: in, pub: out};
    var fxbT: first_order_rate_constant {priv: in, pub: out};
    var hbT: first_order_rate_constant {priv: in, pub: out};
    var gappT: first_order_rate_constant {priv: in, pub: out};
    var fappT: first_order_rate_constant {priv: in, pub: out};
    var P: dimensionless {priv: in, pub: out};
    var N: dimensionless {priv: in, pub: out};
    var kn_pT: first_order_rate_constant {priv: in, pub: out};
    var kp_nT: first_order_rate_constant {priv: in, pub: out};
    var SOVFThin: dimensionless {priv: in, pub: out};
    // outputs
  enddef;

  def comp sarcomere_geometry as
    var SOVFThick: dimensionless {priv: out, pub: out};
    var SOVFThin: dimensionless {priv: out, pub: out};
    var sovr_ze: micrometre;
    var sovr_cle: micrometre;
    var len_sovr: micrometre;
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var SL: micrometre {pub: in};
    var overlap_on_off: dimensionless {init: 1};
    // if this is zero overlap is fixed
    var SEon: dimensionless {pub: in};
    sovr_ze = sel
      case len_thick/2{dimensionless} < SL/2{dimensionless}:
        len_thick/2{dimensionless};
      otherwise:
        SL/2{dimensionless};
    endsel;
    sovr_cle = sel
      case SL/2{dimensionless}-(SL-len_thin) > len_hbare/2{dimensionless}:
        SL/2{dimensionless}-(SL-len_thin);
      otherwise:
        len_hbare/2{dimensionless};
    endsel;
    len_sovr = sovr_ze-sovr_cle;
    SOVFThick = sel
      case overlap_on_off == 1{dimensionless}:
        len_sovr*2{dimensionless}/(len_thick-len_hbare);
      otherwise:
        0.77419{dimensionless};
    endsel;
    // <apply>
    //                <eq/>
    //                <ci>SOVFThick</ci>
    //                <piecewise>
    //                        <piece>
    //                        <cn cellml:units="dimensionless">0.77419</cn>
    //                <apply>
    //                        <eq/>
    //                            <ci>SEon</ci>
    //                            <cn cellml:units="dimensionless">1</cn>
    //                        </apply>
    //                        </piece>
    //
    //
    //                    <otherwise>
    //
    //
    //                        <apply>
    //                    <divide/>
    //                    <apply>
    //                        <times/>
    //                        <ci>len_sovr</ci>
    //                        <cn cellml:units="dimensionless">2</cn>
    //                    </apply>
    //                    <apply>
    //                        <minus/>
    //                        <ci>len_thick</ci>
    //                        <ci>len_hbare</ci>
    //                    </apply>
    //                </apply>
    //                    </otherwise>
    //                </piecewise>
    //            </apply>
    SOVFThin = len_sovr/len_thin;
    // <apply>
    //                <eq/>
    //                <ci>SOVFThin</ci>
    //                <piecewise>
    //                        <piece>
    //                        <cn cellml:units="dimensionless">0.5</cn>
    //                    <apply>
    //                        <eq/>
    //                            <ci>SEon</ci>
    //                            <cn cellml:units="dimensionless">1</cn>
    //                    </apply>
    //                        </piece>
    //                    <otherwise>
    //                        <apply>
    //                        <divide/>
    //                        <ci>len_sovr</ci>
    //                        <ci>len_thin</ci>
    //                        </apply>
    //                    </otherwise>
    //                </piecewise>
    //            </apply>
  enddef;

  def comp Ca_binding_to_troponin_to_thin_filament_regulation as
    var TRPNCaL: dimensionless {init: 0.0144, pub: out};
    var TRPNCaH: dimensionless {init: 0.1276, pub: out};
    var dTRPNCaL: first_order_rate_constant {pub: out};
    var dTRPNCaH: first_order_rate_constant {pub: out};
    var kn_pT: first_order_rate_constant {priv: out, pub: out};
    var kp_nT: first_order_rate_constant {priv: out, pub: out};
    var H: micromolar {pub: out};
    var H_cons: micromolar {pub: out};
    var konT: second_order_rate_constant;
    var koffLT: first_order_rate_constant;
    var koffHT: first_order_rate_constant;
    var Qkon: dimensionless {init: 1.5};
    var Qkoff: dimensionless {init: 1.3};
    var Qkn_p: dimensionless {init: 1.6};
    var Qkp_n: dimensionless {init: 1.6};
    var kon: second_order_rate_constant {init: 0.05};
    var koffL: first_order_rate_constant {init: 0.25};
    var koffH: first_order_rate_constant {init: 0.025};
    var perm50: dimensionless {init: 0.5};
    var nperm: dimensionless {init: 15};
    var kn_p: first_order_rate_constant {init: 0.5};
    var kp_n: first_order_rate_constant {init: 0.05};
    var koffmod: dimensionless {init: 1};
    var Tropreg: dimensionless;
    var permtot: dimensionless;
    var inprmt: dimensionless;
    var pH: dimensionless {init: 7.15};
    var m: dimensionless {init: 1};
    var kdHCa: micromolar {init: 1e-5};
    var time: millisecond {pub: in};
    var TmpC: celsius {pub: in};
    var SOVFThin: dimensionless {pub: in};
    var Ca_i: micromolar {pub: in};
    var Ca_i2: micromolar;
    // removed public_interface in
    Ca_i2 = Ca_i*1{dimensionless};
    konT = (pow(kdHCa, m)+pow(H_cons, m))/(pow(kdHCa, m)+pow(H, m))*kon*pow(Qkon, (TmpC-37{celsius})/10{celsius});
    H = 10e6{micromolar}*pow(10{dimensionless}, -pH);
    H_cons = 10e6{micromolar}*pow(10{dimensionless}, -7.15{dimensionless});
    koffLT = koffL*koffmod*pow(Qkoff, (TmpC-37{celsius})/10{celsius});
    koffHT = koffH*koffmod*pow(Qkoff, (TmpC-37{celsius})/10{celsius});
    kn_pT = kn_p*permtot*pow(Qkn_p, (TmpC-37{celsius})/10{celsius});
    kp_nT = kp_n*inprmt*pow(Qkp_n, (TmpC-37{celsius})/10{celsius});
    permtot = sqrt(abs(1{dimensionless}/(1{dimensionless}+pow(perm50/Tropreg, nperm))));
    inprmt = sel
      case 1{dimensionless}/permtot < 100{dimensionless}:
        1{dimensionless}/permtot;
      otherwise:
        100{dimensionless};
    endsel;
    ode(TRPNCaL, time) = dTRPNCaL;
    dTRPNCaL = konT*Ca_i2*(1{dimensionless}-TRPNCaL)-koffLT*TRPNCaL;
    ode(TRPNCaH, time) = dTRPNCaH;
    dTRPNCaH = konT*Ca_i2*(1{dimensionless}-TRPNCaH)-koffHT*TRPNCaH;
    Tropreg = TRPNCaL*(1{dimensionless}-SOVFThin)+SOVFThin*TRPNCaH;
  enddef;

  def comp thin_filament_regulation_and_crossbridge_cycling_rates as
    var fappT: first_order_rate_constant {priv: out, pub: out};
    var gappT: first_order_rate_constant {priv: out, pub: out};
    var hfT: first_order_rate_constant {priv: out, pub: out};
    var hbT: first_order_rate_constant {priv: out, pub: out};
    var gxbT: first_order_rate_constant {priv: out, pub: out};
    var fapp: first_order_rate_constant {init: 0.5, pub: out};
    var gapp: first_order_rate_constant {init: 0.07, pub: out};
    var hf: first_order_rate_constant {init: 2, pub: out};
    // non-energetically consistent value = 2
    var hb: first_order_rate_constant {init: 0.4, pub: out};
    var gxb: first_order_rate_constant {init: 0.07, pub: out};
    var gslmod: dimensionless {init: 6};
    var hfmd: dimensionless;
    var hbmd: dimensionless;
    var hfmdc: dimensionless {init: 5};
    var hbmdc: dimensionless {init: 0};
    var sigmap: dimensionless {init: 0.1};
    // non-energetically consistent value = 8
    var sigman: dimensionless {init: 1};
    var xbmodsp: dimensionless {pub: in};
    var Qfapp: dimensionless {init: 6.25};
    var Qgapp: dimensionless {init: 2.5};
    var Qhf: dimensionless {init: 6.25};
    var Qhb: dimensionless {init: 6.25};
    var Qgxb: dimensionless {init: 6.25};
    var VD_on_off: dimensionless {init: 1};
    var gxbmd: dimensionless;
    var gapslmd: dimensionless;
    var x_0: micrometre {pub: in};
    var TmpC: celsius {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    fappT = fapp*xbmodsp*pow(Qfapp, (TmpC-37{celsius})/10{celsius});
    gapslmd = 1{dimensionless}+gslmod*(1{dimensionless}-SOVFThick);
    gappT = gapp*gapslmd*xbmodsp*pow(Qgapp, (TmpC-37{celsius})/10{celsius});
    hbmd = exp((xXBpostr-x_0)/abs(xXBpostr-x_0)*hbmdc*sqr((xXBpostr-x_0)/x_0));
    hfT = hf*hfmd*xbmodsp*pow(Qhf, (TmpC-37{celsius})/10{celsius});
    hbT = hb*hbmd*xbmodsp*pow(Qhb, (TmpC-37{celsius})/10{celsius});
    hfmd = sel
      case VD_on_off == 0{dimensionless}:
        exp(-0{dimensionless}/abs(xXBprer)*hfmdc*sqr(xXBprer/x_0));
      otherwise:
        exp(-xXBprer/abs(xXBprer)*hfmdc*sqr(xXBprer/x_0));
    endsel;
    gxbmd = sel
      case VD_on_off == 0{dimensionless}:
        sel(case xXBpostr < x_0: exp(sigmap*sqr((x_0-0.007{dimensionless})/x_0)), otherwise: exp(sigman*sqr((x_0-0.007{dimensionless})/x_0)));
      case VD_on_off == 1{dimensionless}:
        sel(case xXBpostr < x_0: exp(sigmap*sqr((x_0-xXBpostr)/x_0)), otherwise: exp(sigman*sqr((x_0-xXBpostr)/x_0)));
    endsel;
    gxbT = gxb*xbmodsp*gxbmd*pow(Qgxb, (TmpC-37{celsius})/10{celsius});
  enddef;

  def comp regulation_and_crossbridge_cycling_state_equations as
    var XBpostr: dimensionless {init: 0.0001, priv: out, pub: out};
    // trying to get rid of oscillations by adjusting initial conditions. the original value (29-11-2016) is: 1.81017564383744e-6
    var XBprer: dimensionless {init: 0.0001, priv: out, pub: out};
    var dXBpostr: first_order_rate_constant {pub: out};
    var dXBprer: first_order_rate_constant {pub: out};
    var alpha1_plus: first_order_rate_constant {pub: out};
    var alpha2_plus: first_order_rate_constant {pub: out};
    var alpha3_plus: first_order_rate_constant {pub: out};
    var alpha1_minus: first_order_rate_constant {pub: out};
    var alpha2_minus: first_order_rate_constant {pub: out};
    var alpha3_minus: first_order_rate_constant {pub: out};
    var kMgATP: micromolar2 {init: 16736e6, pub: out};
    var kdADP: micromolar {init: 0.004, pub: out};
    var xPi_cons: micromolar {init: 2e3, pub: out};
    var MgATP_cons: micromolar {init: 5e3, pub: out};
    var fxbT: first_order_rate_constant {priv: out, pub: out};
    var N_NoXB: dimensionless {init: 0.9997};
    var P_NoXB: dimensionless {init: 0};
    var P: dimensionless {pub: out, priv: out};
    var N: dimensionless {init: 0.9997, priv: out, pub: out};
    var MgADP_cons: micromolar {init: 36};
    var xPi: micromolar {init: 2e3};
    var MgATP: micromolar {init: 5e3};
    var MgADP: micromolar {init: 36.3};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var kn_pT: first_order_rate_constant {pub: in};
    var kp_nT: first_order_rate_constant {pub: in};
    var H: micromolar {pub: in};
    var H_cons: micromolar {pub: in};
    var ATP_consumption_rate: first_order_rate_constant {pub: out, priv: out};
    var SOVFThick: dimensionless {pub: in};
    var dP: first_order_rate_constant {init: 0};
    ATP_consumption_rate = SOVFThick*(XBpostr*alpha3_plus-P*alpha3_minus);
    ode(N_NoXB, time) = kp_nT*P_NoXB-kn_pT*N_NoXB;
    ode(P_NoXB, time) = kn_pT*N_NoXB-kp_nT*P_NoXB;
    P = 1{dimensionless}-1{dimensionless}*(N+XBprer+XBpostr);
    // <apply>
    //                <eq/>
    //                <apply>
    //                    <diff/>
    //                    <bvar>
    //                        <ci>time</ci>
    //                    </bvar>
    //                    <ci>P</ci>
    //                </apply>
    //                <ci>dP</ci>
    //            </apply>
    ode(N, time) = kp_nT*P-kn_pT*N;
    ode(XBprer, time) = dXBprer;
    dXBprer = alpha1_plus*P+alpha2_minus*XBpostr-(alpha1_minus+alpha2_plus)*XBprer;
    ode(XBpostr, time) = dXBpostr;
    dXBpostr = alpha3_minus*P+alpha2_plus*XBprer-(alpha2_minus+alpha3_plus)*XBpostr;
    alpha1_plus = fappT;
    alpha2_plus = hfT;
    alpha3_plus = MgATP*gxbT/MgATP_cons*(kdADP+MgADP_cons)/(kdADP+MgADP);
    alpha1_minus = xPi*gappT/xPi_cons;
    alpha2_minus = H*hbT/H_cons*(kdADP+MgADP_cons)/MgADP_cons*MgADP/(kdADP+MgADP);
    alpha3_minus = fxbT;
    fxbT = kdADP*fappT*hfT*gxbT/MgATP_cons/(gappT/xPi_cons*hbT/H_cons*kMgATP);
  enddef;

  def comp mean_strain_of_strongly_bound_states as
    var xXBpostr: micrometre {init: 0.00700005394873882, priv: out, pub: out};
    var xXBprer: micrometre {init: 2.22e-17, priv: out, pub: out};
    // changing initial values to get rid of oscillation (value as of 29/11/16 3.41212828972468e-8
    var dxXBpostr: micrometre_per_millisecond {pub: out};
    var dxXBprer: micrometre_per_millisecond {pub: out};
    var xPsi: dimensionless {init: 2};
    var dutyprer: dimensionless;
    var dutypostr: dimensionless;
    var time: millisecond {pub: in};
    var alpha1_plus: first_order_rate_constant {pub: in};
    var alpha2_plus: first_order_rate_constant {pub: in};
    var alpha3_plus: first_order_rate_constant {pub: in};
    var alpha1_minus: first_order_rate_constant {pub: in};
    var alpha2_minus: first_order_rate_constant {pub: in};
    var alpha3_minus: first_order_rate_constant {pub: in};
    var dSL: micrometre_per_millisecond {pub: in};
    var x_0: micrometre {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    ode(xXBprer, time) = dxXBprer;
    // this originally was plus in the code
    dxXBprer = 1{dimensionless}*dSL/2{dimensionless}+xPsi/dutyprer*(+(alpha2_minus*(xXBpostr-x_0-xXBprer)-alpha1_plus*xXBprer));
    ode(xXBpostr, time) = dxXBpostr;
    // end times
    // times keep
    // end of plus
    dxXBpostr = 1{dimensionless}*dSL/2{dimensionless}+xPsi/dutypostr*(alpha2_plus*(xXBprer+x_0-xXBpostr));
    dutyprer = (alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus)/(alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus+alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus+alpha2_plus*alpha3_plus+alpha3_minus*alpha1_minus+alpha3_plus*alpha1_minus);
    dutypostr = (alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus)/(alpha1_plus*alpha2_plus+alpha3_minus*alpha1_minus+alpha3_minus*alpha2_plus+alpha3_minus*alpha2_minus+alpha3_plus*alpha1_plus+alpha2_minus*alpha1_plus+alpha2_plus*alpha3_plus+alpha3_minus*alpha1_minus+alpha3_plus*alpha1_minus);
  enddef;

  def comp normalised_active_and_passive_force as
    var SSXBpostr: dimensionless {pub: out};
    var SSXBprer: dimensionless {pub: out};
    var dSL: micrometre_per_millisecond {priv: out, pub: out};
    var SL: micrometre {init: 2.3, pub: out};
    var lambda: dimensionless {pub: in};
    var lambda_dot: per_millisecond {pub: in};
    var velocitySF: dimensionless {pub: in};
    var quickRelease_onOff: dimensionless {init: 1};
    var VelocitySwitch: dimensionless {pub: in};
    var SL_computed_diff: micrometre {init: 2.3, priv: out, pub: out};
    var x_area: dimensionless {init: 1, pub: out};
    var active_tension: dimensionless {priv: out, pub: out};
    var kxb: millinewton_per_millimetre2 {init: 1};
    var Fnordv: millinewton_micrometre_per_millimetre2;
    var force: millinewton_micrometre_per_millimetre2 {pub: out};
    var active: unit_normalised_force {pub: out};
    var preload: unit_normalised_force {priv: out, pub: out};
    var passive: unit_normalised_force {priv: out, pub: out};
    var F_collagen: unit_normalised_force;
    var F_titin: unit_normalised_force;
    var afterload: unit_normalised_force {init: 0, priv: out, pub: out};
    var SL_c: micrometre {init: 2.25};
    var SLrest: micrometre {pub: in};
    var SLset: micrometre {pub: in};
    var PCon_t: unit_normalised_force {init: 0.002};
    var PExp_t: per_micrometre {init: 10};
    var PCon_c: unit_normalised_force {init: 0.02};
    var PExp_c: per_micrometre {init: 70};
    var KSE: unit_normalised_force_per_micrometre {init: 50};
    var fxb: first_order_rate_constant;
    var fxbT: first_order_rate_constant {pub: in};
    var P: dimensionless {pub: in};
    var MgATP_cons: micromolar {pub: in};
    var xPi_cons: micromolar {pub: in};
    var H_cons: micromolar {pub: in};
    var kMgATP: micromolar2 {pub: in};
    var kdADP: micromolar {pub: in};
    var x_0: micrometre {pub: in};
    var fapp: first_order_rate_constant {pub: in};
    var gapp: first_order_rate_constant {pub: in};
    var hf: first_order_rate_constant {pub: in};
    var hb: first_order_rate_constant {pub: in};
    var gxb: first_order_rate_constant {pub: in};
    var time: millisecond {pub: in};
    var fappT: first_order_rate_constant {pub: in};
    var gappT: first_order_rate_constant {pub: in};
    var hfT: first_order_rate_constant {pub: in};
    var hbT: first_order_rate_constant {pub: in};
    var gxbT: first_order_rate_constant {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SEon: dimensionless {init: 0, priv: out, pub: out};
    var lambdaC: dimensionless {pub: out};
    var lambdaDotC: per_millisecond {pub: out};
    var integral_force: unit_normalised_force_millisecond {init: 0, priv: out, pub: out};
    var F_total: dimensionless {priv: out, pub: out};
    var viscosity: unit_normalised_force_millisecond_per_micrometre {init: 0.003};
    // 0.4 prevents oscillation but 0.3 is from RICE
    var mass: unit_normalised_force_millisecond2_per_micrometre {init: 50, pub: out, priv: out};
    // was 0.005
    var XB_cycling: first_order_rate_constant {pub: out, priv: out};
    XB_cycling = 1000{dimensionless}*(gxbT*XBpostr-fxbT*P);
    lambdaC = lambda;
    lambdaDotC = lambda_dot;
    fxb = kdADP*fapp*hf*gxb/MgATP_cons/(gapp/xPi_cons*hb/H_cons*kMgATP);
    SSXBprer = (fxb*hb+gxb*fapp+hbT*fapp)/(hf*gxb+hb*gapp+gxb*gapp+fxb*hb+gxb*fapp+hb*fapp+fxb*gapp+fapp*hf+fxb*hb);
    SSXBpostr = (fapp*hf+fxb*gapp+fxb*hb)/(hf*gxb+hb*gapp+gxb*gapp+fxb*hb+gxb*fapp+hb*fapp+fxb*gapp+fapp*hf+fxb*hb);
    Fnordv = kxb*x_0*SSXBpostr;
    force = kxb*SOVFThick*(xXBpostr*XBpostr+xXBprer*XBprer);
    active = 1{unit_normalised_force}*force/Fnordv;
    active_tension = force/x_area;
    preload = abs(SLset-SLrest)/(SLset-SLrest)*PCon_t*(exp(PExp_t*abs(SLset-SLrest))-1{dimensionless});
    F_collagen = sel
      case SL >= SL_c:
        PCon_c*exp(PExp_c*(SL-SL_c)-1{dimensionless});
      otherwise:
        0{unit_normalised_force};
    endsel;
    F_titin = abs(SL-SLrest)/(SL-SLrest)*PCon_t*(exp(PExp_t*abs(SL-SLrest))-1{dimensionless});
    // <apply>
    //                 <eq/>
    //                 <ci>F_titin</ci>
    //                 <apply>
    //                     <times/>
    //                      <apply>
    //                         <divide/>
    //                         <apply>
    //                             <abs/>
    //                             <apply>
    //                                 <minus/>
    //                                 <ci>SL</ci>
    //                                 <ci>SLrest</ci>
    //                             </apply>
    //                         </apply>
    //                         <apply>
    //                             <minus/>
    //                             <ci>SL</ci>
    //                             <ci>SLrest</ci>
    //                         </apply>
    //                     </apply>
    //                     <ci>PCon_t</ci>
    //
    //                         <apply>
    //                             <exp/>
    //                             <apply>
    //                                 <minus/>
    //                             <apply>
    //                                 <times/>
    //                                 <ci>PExp_t</ci>
    //
    //                                     <apply>
    //                                     <abs/>
    //                                     <apply>
    //                                         <minus/>
    //                                         <ci>SL</ci>
    //                                         <ci>SLrest</ci>
    //                                     </apply>
    //                                 </apply>
    //
    //                             </apply>
    //                             <cn cellml:units="dimensionless">1</cn>
    //                             </apply>
    //                         </apply>
    //
    //
    //                 </apply>
    //                 </apply>
    passive = F_titin;
    F_total = active+passive;
    // <ci>preload</ci>
    ode(integral_force, time) = sel
      case SEon == 1{dimensionless}:
        afterload+(-F_total);
      case (SEon == 2{dimensionless}) and (integral_force < 0{dimensionless}):
        0.02{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(SL_computed_diff, time) = lambda_dot*SLrest;
    dSL = sel
      case SEon == 1{dimensionless}:
        (integral_force+viscosity*(SLrest-SL))/mass;
      case SEon == 2{dimensionless}:
        0.002{dimensionless};
      case quickRelease_onOff == 1{dimensionless}:
        lambda_dot*SLrest*velocitySF;
      otherwise:
        0{unit_normalised_force};
    endsel;
    ode(SL, time) = dSL;
  enddef;

  def comp calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding as
    var FrSBXB: dimensionless;
    var dFrSBXB: first_order_rate_constant;
    var dsovr_ze: micrometre_per_millisecond;
    var dsovr_cle: micrometre_per_millisecond;
    var dlen_sovr: micrometre_per_millisecond;
    var dSOVFThick: first_order_rate_constant;
    var dSOVFThin: first_order_rate_constant;
    var kxb: millinewton_per_millimetre2 {init: 1, pub: out};
    var dforce: millinewton_micrometre_per_millimetre2_per_millisecond;
    var Trop_conc: micromolar {init: 70};
    var TropTot: micromolar {pub: out};
    var dTropTot: micromolar_per_millisecond {priv: out, pub: out};
    var dSL: micrometre_per_millisecond {pub: in};
    var SL: micrometre {pub: in};
    var dXBpostr: first_order_rate_constant {pub: in};
    var dXBprer: first_order_rate_constant {pub: in};
    var dxXBpostr: micrometre_per_millisecond {pub: in};
    var dxXBprer: micrometre_per_millisecond {pub: in};
    var XBpostr: dimensionless {pub: in};
    var XBprer: dimensionless {pub: in};
    var xXBpostr: micrometre {pub: in};
    var xXBprer: micrometre {pub: in};
    var SSXBpostr: dimensionless {pub: in};
    var SSXBprer: dimensionless {pub: in};
    var SOVFThick: dimensionless {pub: in};
    var SOVFThin: dimensionless {pub: in};
    var len_thin: micrometre {pub: in};
    var len_thick: micrometre {pub: in};
    var len_hbare: micrometre {pub: in};
    var TRPNCaL: dimensionless {pub: in};
    var TRPNCaH: dimensionless {pub: in};
    var dTRPNCaL: first_order_rate_constant {pub: in};
    var dTRPNCaH: first_order_rate_constant {pub: in};
    FrSBXB = (XBpostr+XBprer)/(SSXBpostr+SSXBprer);
    dFrSBXB = (dXBpostr+dXBprer)/(SSXBpostr+SSXBprer);
    dsovr_ze = sel
      case SL < len_thick:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dsovr_cle = sel
      case 2{dimensionless}*len_thin-SL > len_hbare:
        -0.5{dimensionless}*dSL;
      otherwise:
        0{micrometre_per_millisecond};
    endsel;
    dlen_sovr = dsovr_ze-dsovr_cle;
    dSOVFThin = dlen_sovr/len_thin;
    dSOVFThick = 2{dimensionless}*dlen_sovr/(len_thick-len_hbare);
    TropTot = Trop_conc*(TRPNCaL*(1{dimensionless}-SOVFThin)+SOVFThin*(FrSBXB*TRPNCaH+TRPNCaL*(1{dimensionless}-FrSBXB)));
    dTropTot = Trop_conc*(-dSOVFThin*TRPNCaL+dTRPNCaL*(1{dimensionless}-SOVFThin)+dSOVFThin*(FrSBXB*TRPNCaH+TRPNCaL*(1{dimensionless}-FrSBXB))+SOVFThin*(dFrSBXB*TRPNCaH+FrSBXB*dTRPNCaH+dTRPNCaL*(1{dimensionless}-FrSBXB)-dFrSBXB*TRPNCaL));
    dforce = kxb*dSOVFThick*(xXBpostr*XBpostr+xXBprer*XBprer)+kxb*SOVFThick*(dxXBpostr*XBpostr+xXBpostr*dXBpostr+dxXBprer*XBprer+xXBprer*dXBprer);
  enddef;

  def comp model_parameters as
    var len_thin: micrometre {init: 1.2, priv: out, pub: out};
    var len_thick: micrometre {init: 1.65, priv: out, pub: out};
    var len_hbare: micrometre {init: 0.1, priv: out, pub: out};
    // <variable name="TmpC" units="celsius" initial_value="22" public_interface="out"/>
    //      <variable name="x_0" units="micrometre" initial_value="0.007" public_interface="out"/>
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and interface for
    vars dTropTot and dTropTot;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and interface for
    // added connection
    vars x_0 and x_0;
    vars TmpC and TmpC;
    vars xbmodsp and xbmodsp;
    vars hfT and hfT;
    vars gxbT and gxbT;
    vars hbT and hbT;
    vars gappT and gappT;
    vars fappT and fappT;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and interface for
    // added connection
    vars TmpC and TmpC;
    vars time and time;
    vars Ca_i and Ca_i;
    vars kn_pT and kn_pT;
    vars kp_nT and kp_nT;
  enddef;
  def map between mean_strain_of_strongly_bound_states and interface for
    // added connection
    vars x_0 and x_0;
    vars time and time;
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
  enddef;
  def map between normalised_active_and_passive_force and interface for
    // added connection
    vars x_0 and x_0;
    vars lambda and lambda;
    vars lambda_dot and lambda_dot;
    vars velocitySF and velocitySF;
    vars VelocitySwitch and VelocitySwitch;
    vars SLrest and SLrest;
    vars SLset and SLset;
    vars time and time;
    vars active_tension and active_tension;
    vars SL and SL;
    vars afterload and afterload;
    vars preload and preload;
    vars passive and passive;
    vars integral_force and integral_force;
    vars F_total and F_total;
    vars SEon and SEon;
    vars mass and mass;
    vars XB_cycling and XB_cycling;
    vars dSL and dSL;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and sarcomere_geometry for
    vars SOVFThick and SOVFThick;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and interface for
    vars time and time;
    vars ATP_consumption_rate and ATP_consumption_rate;
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars fxbT and fxbT;
    vars P and P;
    vars N and N;
  enddef;
  def map between sarcomere_geometry and normalised_active_and_passive_force for
    vars SL and SL;
    vars SOVFThick and SOVFThick;
    vars SEon and SEon;
  enddef;
  def map between sarcomere_geometry and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between sarcomere_geometry and interface for
    vars SOVFThick and SOVFThick;
    vars SOVFThin and SOVFThin;
  enddef;
  def map between Ca_binding_to_troponin_to_thin_filament_regulation and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and sarcomere_geometry for
    vars SOVFThick and SOVFThick;
  enddef;
  def map between thin_filament_regulation_and_crossbridge_cycling_rates and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars kn_pT and kn_pT;
    vars kp_nT and kp_nT;
    vars H and H;
    vars H_cons and H_cons;
  enddef;
  // <connection>
  //       <map_components component_1="mean_strain_of_strongly_bound_states" component_2="model_parameters"/>
  //       <map_variables variable_1="x_0" variable_2="x_0"/>
  //    </connection>
  def map between normalised_active_and_passive_force and thin_filament_regulation_and_crossbridge_cycling_rates for
    vars fapp and fapp;
    vars gapp and gapp;
    vars hf and hf;
    vars hb and hb;
    vars gxb and gxb;
    vars fappT and fappT;
    vars gappT and gappT;
    vars hfT and hfT;
    vars hbT and hbT;
    vars gxbT and gxbT;
  enddef;
  def map between normalised_active_and_passive_force and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars kMgATP and kMgATP;
    vars kdADP and kdADP;
    vars xPi_cons and xPi_cons;
    vars MgATP_cons and MgATP_cons;
    vars P and P;
    vars fxbT and fxbT;
  enddef;
  def map between normalised_active_and_passive_force and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dSL and dSL;
  enddef;
  def map between normalised_active_and_passive_force and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars H_cons and H_cons;
  enddef;
  // <connection>
  //       <map_components component_1="normalised_active_and_passive_force" component_2="model_parameters"/>
  //       <map_variables variable_1="x_0" variable_2="x_0"/>
  //    </connection>
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and model_parameters for
    vars len_thin and len_thin;
    vars len_thick and len_thick;
    vars len_hbare and len_hbare;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and Ca_binding_to_troponin_to_thin_filament_regulation for
    vars TRPNCaL and TRPNCaL;
    vars TRPNCaH and TRPNCaH;
    vars dTRPNCaL and dTRPNCaL;
    vars dTRPNCaH and dTRPNCaH;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and regulation_and_crossbridge_cycling_state_equations for
    vars XBpostr and XBpostr;
    vars XBprer and XBprer;
    vars dXBpostr and dXBpostr;
    vars dXBprer and dXBprer;
  enddef;
  def map between regulation_and_crossbridge_cycling_state_equations and mean_strain_of_strongly_bound_states for
    vars alpha1_plus and alpha1_plus;
    vars alpha2_plus and alpha2_plus;
    vars alpha3_plus and alpha3_plus;
    vars alpha1_minus and alpha1_minus;
    vars alpha2_minus and alpha2_minus;
    vars alpha3_minus and alpha3_minus;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and mean_strain_of_strongly_bound_states for
    vars xXBpostr and xXBpostr;
    vars xXBprer and xXBprer;
    vars dxXBpostr and dxXBpostr;
    vars dxXBprer and dxXBprer;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and normalised_active_and_passive_force for
    vars SSXBpostr and SSXBpostr;
    vars SSXBprer and SSXBprer;
    vars SL and SL;
    vars dSL and dSL;
  enddef;
  def map between calculation_of_micromolar_per_millisecondes_of_Ca_for_apparent_Ca_binding and sarcomere_geometry for
    vars SOVFThin and SOVFThin;
    vars SOVFThick and SOVFThick;
  enddef;
enddef;
